<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="4.3.0">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>L:\MS_data\Corinna_Brungs\pluskal_mce\20220601_mzml_mce_bioactive_positive\20220601_100AGC_pluskal_mce_1D1_A1_id.mzML</file>
            <file>L:\MS_data\Corinna_Brungs\pluskal_mce\20220601_mzml_mce_bioactive_positive\20220601_100AGC_pluskal_mce_1D1_A2_id.mzML</file>
            <file>L:\MS_data\Corinna_Brungs\pluskal_mce\20220601_mzml_mce_bioactive_positive\20220601_100AGC_pluskal_mce_1D1_A3_id.mzML</file>
            <file>L:\MS_data\Corinna_Brungs\pluskal_mce\20220601_mzml_mce_bioactive_positive\20220601_100AGC_pluskal_mce_1D1_A4_id.mzML</file>
            <file>L:\MS_data\Corinna_Brungs\pluskal_mce\20220601_mzml_mce_bioactive_positive\20220601_100AGC_pluskal_mce_1D1_A5_id.mzML</file>
            <file>L:\MS_data\Corinna_Brungs\pluskal_mce\20220601_mzml_mce_bioactive_positive\20220601_100AGC_pluskal_mce_1D1_A6_id.mzML</file>
            <file>L:\MS_data\Corinna_Brungs\pluskal_mce\20220601_mzml_mce_bioactive_positive\20220601_100AGC_pluskal_mce_1D1_A7_id.mzML</file>
            <file>L:\MS_data\Corinna_Brungs\pluskal_mce\20220601_mzml_mce_bioactive_positive\20220601_100AGC_pluskal_mce_1D1_A8_id.mzML</file>
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        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="false"/>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="false">
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        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">2.5</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_scan_signals.ScanSignalRemovalModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Exclude m/z ranges">149.665-149.737,173.509-173.541</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_msn_tree.MsnTreeFeatureDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="EIC scans" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.004</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">msn trees</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_localcsvsearch.LocalCSVDatabaseSearchModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Database file">
            <current_file>D:\Corinna\metadata\mcebio_cleaned.tsv</current_file>
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        </parameter>
        <parameter name="Field separator">\t</parameter>
        <parameter name="Columns">
            <importtype column="monoisotopic_mass" datatype="io.github.mzmine.datamodel.features.types.numbers.NeutralMassType" selected="true"/>
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            <importtype column="formula" datatype="io.github.mzmine.datamodel.features.types.annotations.formula.FormulaType" selected="true"/>
            <importtype column="smiles" datatype="io.github.mzmine.datamodel.features.types.annotations.SmilesStructureType" selected="true"/>
            <importtype column="inchi" datatype="io.github.mzmine.datamodel.features.types.annotations.InChIStructureType" selected="true"/>
            <importtype column="inchikey" datatype="io.github.mzmine.datamodel.features.types.annotations.InChIKeyStructureType" selected="true"/>
            <importtype column="compound_name" datatype="io.github.mzmine.datamodel.features.types.annotations.CompoundNameType" selected="true"/>
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            <importtype column="pubchem_cid" datatype="io.github.mzmine.modules.dataprocessing.id_localcsvsearch.PubChemIdType" selected="true"/>
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>8.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">9999999.0</parameter>
        <parameter name="Mobility time tolerance">0.01</parameter>
        <parameter name="CCS tolerance (%)">0.05</parameter>
        <parameter name="Use isotope matcher" selected="false">
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        </parameter>
        <parameter name="Use adducts" selected="true">
            <parameter name="Maximum charge">1</parameter>
            <parameter name="Maximum molecules/cluster">1</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="0.0" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="0" mass_difference="-18.01056" mol_formula="" name="H2O" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.01056" mol_formula="" name="H2O" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.01056" mol_formula="" name="H2O" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.01056" mol_formula="" name="H2O" type="ADDUCT"/>
                </adduct_type>
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            </parameter>
        </parameter>
        <parameter name="Filter filename header" selected="true">unique_sample_id</parameter>
        <parameter name="Append comment fields"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.spectraldbsubmit.batch.LibraryBatchGenerationModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Export file">
            <current_file>D:\Corinna\MSn_library\20241003_mcebio_pos_ms2</current_file>
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        </parameter>
        <parameter name="Export format">mgf</parameter>
        <parameter name="MS level filter" selected="MS2, level = 2">3</parameter>
        <parameter name="Metadata">
            <parameter name="description">MCEBIO</parameter>
            <parameter name="Dataset ID">MSV000094528</parameter>
            <parameter name="INSTRUMENT_NAME">Orbitrap ID-X</parameter>
            <parameter name="INSTRUMENT">Orbitrap</parameter>
            <parameter name="Ion mobility">none</parameter>
            <parameter name="IONSOURCE">ESI</parameter>
            <parameter name="ACQUISITION">Commercial</parameter>
            <parameter name="PI">Tomas Pluskal</parameter>
            <parameter name="DATACOLLECTOR">Corinna Brungs</parameter>
            <parameter name="IONMODE" selected="false">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</parameter>
        </parameter>
        <parameter name="m/z tolerance (merging)" selected="true">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Handle chimeric spectra" selected="true">
            <parameter name="Target ion m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Precursor m/z isolation tolerance">
                <absolutetolerance>0.6</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Minimum precursor purity (%)">0.75</parameter>
            <parameter name="Chimeric spectra">flag</parameter>
        </parameter>
        <parameter name="Quality parameters">
            <parameter name="Minimum number of signals" selected="true">2</parameter>
            <parameter name="Minimum explained signals (%)" selected="false">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</parameter>
            <parameter name="Minimum explained intensity (%)" selected="false">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</parameter>
            <parameter name="Formula m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Export explained signals only">false</parameter>
            <parameter name="Match compound and feature list name">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.spectraldbsubmit.batch.LibraryBatchGenerationModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Export file">
            <current_file>D:\Corinna\MSn_library\20241003_mcebio_pos_msn</current_file>
        </parameter>
        <parameter name="Export format">mgf</parameter>
        <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
        <parameter name="Metadata">
            <parameter name="description">MCEBIO</parameter>
            <parameter name="Dataset ID">MSV000094528</parameter>
            <parameter name="INSTRUMENT_NAME">Orbitrap ID-X</parameter>
            <parameter name="INSTRUMENT">Orbitrap</parameter>
            <parameter name="Ion mobility">none</parameter>
            <parameter name="IONSOURCE">ESI</parameter>
            <parameter name="ACQUISITION">Commercial</parameter>
            <parameter name="PI">Tomas Pluskal</parameter>
            <parameter name="DATACOLLECTOR">Corinna Brungs</parameter>
            <parameter name="IONMODE" selected="false">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</parameter>
        </parameter>
        <parameter name="m/z tolerance (merging)" selected="true">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Handle chimeric spectra" selected="true">
            <parameter name="Target ion m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Precursor m/z isolation tolerance">
                <absolutetolerance>0.6</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Minimum precursor purity (%)">0.75</parameter>
            <parameter name="Chimeric spectra">flag</parameter>
        </parameter>
        <parameter name="Quality parameters">
            <parameter name="Minimum number of signals" selected="true">2</parameter>
            <parameter name="Minimum explained signals (%)" selected="false">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</parameter>
            <parameter name="Minimum explained intensity (%)" selected="false">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</parameter>
            <parameter name="Formula m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Export explained signals only">false</parameter>
            <parameter name="Match compound and feature list name">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.spectraldbsubmit.batch.LibraryBatchGenerationModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Export file">
            <current_file>D:\Corinna\MSn_library\20241003_mcebio_pos_ms2</current_file>
        </parameter>
        <parameter name="Export format">MZmine json (recommended)</parameter>
        <parameter name="MS level filter" selected="MS2, level = 2">3</parameter>
        <parameter name="Metadata">
            <parameter name="description">MCEBIO</parameter>
            <parameter name="Dataset ID">MSV000094528</parameter>
            <parameter name="INSTRUMENT_NAME">Orbitrap ID-X</parameter>
            <parameter name="INSTRUMENT">Orbitrap</parameter>
            <parameter name="Ion mobility">none</parameter>
            <parameter name="IONSOURCE">ESI</parameter>
            <parameter name="ACQUISITION">Commercial</parameter>
            <parameter name="PI">Tomas Pluskal</parameter>
            <parameter name="DATACOLLECTOR">Corinna Brungs</parameter>
            <parameter name="IONMODE" selected="false">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</parameter>
        </parameter>
        <parameter name="m/z tolerance (merging)" selected="true">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Handle chimeric spectra" selected="true">
            <parameter name="Target ion m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Precursor m/z isolation tolerance">
                <absolutetolerance>0.6</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Minimum precursor purity (%)">0.75</parameter>
            <parameter name="Chimeric spectra">flag</parameter>
        </parameter>
        <parameter name="Quality parameters">
            <parameter name="Minimum number of signals" selected="true">2</parameter>
            <parameter name="Minimum explained signals (%)" selected="false">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</parameter>
            <parameter name="Minimum explained intensity (%)" selected="false">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</parameter>
            <parameter name="Formula m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Export explained signals only">false</parameter>
            <parameter name="Match compound and feature list name">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.spectraldbsubmit.batch.LibraryBatchGenerationModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Export file">
            <current_file>D:\Corinna\MSn_library\20241003_mcebio_pos_msn</current_file>
        </parameter>
        <parameter name="Export format">MZmine json (recommended)</parameter>
        <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
        <parameter name="Metadata">
            <parameter name="description">MCEBIO</parameter>
            <parameter name="Dataset ID">MSV000094528</parameter>
            <parameter name="INSTRUMENT_NAME">Orbitrap ID-X</parameter>
            <parameter name="INSTRUMENT">Orbitrap</parameter>
            <parameter name="Ion mobility">none</parameter>
            <parameter name="IONSOURCE">ESI</parameter>
            <parameter name="ACQUISITION">Commercial</parameter>
            <parameter name="PI">Tomas Pluskal</parameter>
            <parameter name="DATACOLLECTOR">Corinna Brungs</parameter>
            <parameter name="IONMODE" selected="false">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</parameter>
        </parameter>
        <parameter name="m/z tolerance (merging)" selected="true">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Handle chimeric spectra" selected="true">
            <parameter name="Target ion m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Precursor m/z isolation tolerance">
                <absolutetolerance>0.6</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Minimum precursor purity (%)">0.75</parameter>
            <parameter name="Chimeric spectra">flag</parameter>
        </parameter>
        <parameter name="Quality parameters">
            <parameter name="Minimum number of signals" selected="true">2</parameter>
            <parameter name="Minimum explained signals (%)" selected="false">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</parameter>
            <parameter name="Minimum explained intensity (%)" selected="false">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</parameter>
            <parameter name="Formula m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Export explained signals only">false</parameter>
            <parameter name="Match compound and feature list name">false</parameter>
        </parameter>
    </batchstep>
</batch>
